CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "tif")
    Name to assign these images:SCANS
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:SCANS
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:SCANS
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):8,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:50
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    Thresholding method:Otsu

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder|Desktop/UCSF/MR HBC-1334 03.09.22/git repo/images/CROPPED/HBC-1713_CD8a_502 LYN.czi #1/c1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjects|Number_Object_Number,IdentifyPrimaryObjects|Location_Center_Y,IdentifyPrimaryObjects|Location_Center_Z,IdentifyPrimaryObjects|Location_Center_X
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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